CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:48
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', 'Files are loaded as single channel RGB files. DAPI is blue and named C1, the green channel files contain C2, the red channel files contain C3, and the white channel files contain C4.']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "C1")
    Name to assign these images:DAPI
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C2")
    Name to assign these images:green
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C3")
    Name to assign these images:red
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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notes:['Color to Gray module converts RGB images to greyscale images - for blue.']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
    Select the input image:DAPI
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:No
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    Convert green to gray?:No
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    Convert blue to gray?:Yes
    Name the output image:OrigNuclei
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
ColorToGray:[module_num:6|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notes:['Color to Gray module converts RGB images to greyscale images - for green.']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
    Select the input image:green
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:No
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    Convert green to gray?:Yes
    Name the output image:OrigGreen
    Convert blue to gray?:No
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
ColorToGray:[module_num:7|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notes:['Color to Gray module converts RGB images to greyscale images - for red.']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
    Select the input image:red
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:OrigRed
    Convert green to gray?:No
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    Convert blue to gray?:No
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
EnhanceOrSuppressFeatures:[module_num:8|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notes:['Enhancing Speckles helps to identify transcript dots - green channel.']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
    Select the input image:OrigGreen
    Name the output image:EnhancedGreen
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow
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
EnhanceOrSuppressFeatures:[module_num:9|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notes:['Enhancing Speckles helps to identify transcript dots - white channel.']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
    Select the input image:OrigNuclei
    Name the output image:EnhancedNuclei
    Select the operation:Enhance
    Feature size:20
    Feature type:Speckles
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    Speed and accuracy:Slow
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
EnhanceOrSuppressFeatures:[module_num:10|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notes:['Enhancing Speckles helps to identify transcript dots - red channel.']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
    Select the input image:OrigRed
    Name the output image:EnhancedRed
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:11|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notes:['The next four modules IdentifyPrimaryObjects identify all area that is occupied to measure intensity and calculate threshold for objects automatically.']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enabled:False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
    Select the input image:OrigNuclei
    Name the primary objects to be identified:NucleiArea
    Typical diameter of objects, in pixel units (Min,Max):5,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Suppress local maxima that are closer than this minimum allowed distance:3
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:12|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enabled:False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
    Select the input image:EnhancedGreen
    Name the primary objects to be identified:GreenArea
    Typical diameter of objects, in pixel units (Min,Max):1,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Suppress local maxima that are closer than this minimum allowed distance:2
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.15,1.0
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    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:13|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enabled:False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
    Select the input image:OrigRed
    Name the primary objects to be identified:RedArea
    Typical diameter of objects, in pixel units (Min,Max):2,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Suppress local maxima that are closer than this minimum allowed distance:2
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.4,1.0
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    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:14|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
    Select the input image:OrigNuclei
    Name the primary objects to be identified:WhiteArea
    Typical diameter of objects, in pixel units (Min,Max):1,10000
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Suppress local maxima that are closer than this minimum allowed distance:15
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.00001
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
MeasureImageIntensity:[module_num:15|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notes:['This Module mesures the intensity of all four channels in the occupied area. ']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
    Select images to measure:OrigGreen, OrigNuclei, OrigRed
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
IdentifyPrimaryObjects:[module_num:16|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notes:['This module identifies the DAPI nuclei, threshold is calculated based on the medianintensity of the occupied area.']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
    Select the input image:OrigNuclei
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):8,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Measurement
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Select the measurement to threshold with:Intensity_MedianIntensity_OrigNuclei
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
IdentifyPrimaryObjects:[module_num:17|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notes:['This module identifies the green dots, threshold is calculated based on the medianintensity of the occupied area.']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
    Select the input image:EnhancedGreen
    Name the primary objects to be identified:Green
    Typical diameter of objects, in pixel units (Min,Max):1,30
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Measurement
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.9
    Lower and upper bounds on threshold:0.1,1.0
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    Select the measurement to threshold with:Intensity_MedianIntensity_OrigGreen
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
IdentifyPrimaryObjects:[module_num:18|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notes:['This module identifies the red dots, threshold is calculated based on the medianintensity of the occupied area.']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
    Select the input image:OrigRed
    Name the primary objects to be identified:Red
    Typical diameter of objects, in pixel units (Min,Max):1,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Measurement
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.75
    Lower and upper bounds on threshold:0.1,1.0
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    Select the measurement to threshold with:Intensity_MedianIntensity_OrigRed
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
IdentifyPrimaryObjects:[module_num:19|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notes:['This module identifies the white dots, threshold is calculated based on the medianintensity of the occupied area.']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enabled:False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
    Select the input image:EnhancedWhite
    Name the primary objects to be identified:White
    Typical diameter of objects, in pixel units (Min,Max):1,30
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Measurement
    Threshold smoothing scale:1.3488
    Threshold correction factor:7.5
    Lower and upper bounds on threshold:0.0,1.0
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    Select the measurement to threshold with:Intensity_MedianIntensity_white_WhiteArea
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
IdentifySecondaryObjects:[module_num:20|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notes:['This module enlarge the identified nuclei to cells to account for somatic located dots.']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Distance - N
    Select the input image:OrigNuclei
    Number of pixels by which to expand the primary objects:6
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
MeasureObjectIntensity:[module_num:21|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
    Select images to measure:OrigGreen, OrigRed
    Select objects to measure:Cells

RelateObjects:[module_num:22|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notes:['The next three modules relate/assign the identifed to the cells.']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
    Parent objects:Cells
    Child objects:Red
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:23|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
    Parent objects:Cells
    Child objects:Green
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:24|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enabled:False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
    Parent objects:Cells
    Child objects:White
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
FilterObjects:[module_num:25|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notes:['The next three modules filter the cells, such that only cells with 3 or more dots are accounted.']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
    Select the objects to filter:Cells
    Name the output objects:RedCells_pdyn_dotcounts
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:Children_Red_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:3
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:26|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
    Select the objects to filter:Cells
    Name the output objects:RedCells_pdyn_meanintensity
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_OrigRed
    Filter using a minimum measurement value?:Yes
    Minimum value:0.6
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0

CombineObjects:[module_num:27|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
    Select initial object set:RedCells_pdyn_dotcounts
    Select object set to combine:RedCells_pdyn_meanintensity
    Select how to handle overlapping objects:Merge
    Name the combined object set:RedCells_pdyn

FilterObjects:[module_num:28|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enabled:False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
    Select the objects to filter:Cells
    Name the output objects:WhiteCells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:Children_White_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:3
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:29|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
    Select the objects to filter:Cells
    Name the output objects:GreenCells_lepR
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:Children_Green_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:3
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:30|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enabled:False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
    Select the objects to filter:Cells
    Name the output objects:GreenCells_lepR_meanintensity
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_OrigRed
    Filter using a minimum measurement value?:Yes
    Minimum value:0.6
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0

RelateObjects:[module_num:31|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notes:['The next three modules relate red, white and green dots to all red cells.']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enabled:False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
    Parent objects:RedCells_fos
    Child objects:Red
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:32|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enabled:False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
    Parent objects:RedCells
    Child objects:White
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:33|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
    Parent objects:RedCells_pdyn
    Child objects:Green
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
FilterObjects:[module_num:34|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notes:['The next four modules filters these red cells into cells that are also positive for green or white, both or none. ']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
    Select the objects to filter:RedCells_pdyn
    Name the output objects:RedandGreenCells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:Children_Green_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:5
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:35|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enabled:False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
    Select the objects to filter:RedCells
    Name the output objects:RedandWhiteCells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:Children_White_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:20
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:Children_Green_Count
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:4

FilterObjects:[module_num:36|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enabled:False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
    Select the objects to filter:RedCells
    Name the output objects:RedandNoneCells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:Children_Green_Count
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:4
    Select the measurement to filter by:Children_Red_Count
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:19

FilterObjects:[module_num:37|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enabled:False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
    Select the objects to filter:RedCells
    Name the output objects:RedandBothCells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:Children_Green_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:5
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:Children_White_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:20
    Filter using a maximum measurement value?:No
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
RelateObjects:[module_num:38|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notes:['The next six modules relate the red dots to the subgroups of red cells. ']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enabled:False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
    Parent objects:RedandGreenCells
    Child objects:Red
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:39|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enabled:False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
    Parent objects:RedandWhiteCells
    Child objects:Red
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:40|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enabled:False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
    Parent objects:RedandNoneCells
    Child objects:Red
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:41|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enabled:False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
    Parent objects:RedandBothCells
    Child objects:Red
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:No
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
MaskObjects:[module_num:42|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enabled:False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
    Select objects to be masked:Red
    Name the masked objects:RedDotsonRedandGreenCells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:RedandGreenCells
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:43|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enabled:False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
    Select objects to be masked:Red
    Name the masked objects:RedDotsonRedandWhiteCells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:RedandWhiteCells
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:44|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enabled:False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
    Select objects to be masked:Red
    Name the masked objects:RedDotsonRedandNoneCells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:RedandNoneCells
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:45|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enabled:False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
    Select objects to be masked:Red
    Name the masked objects:RedDotsonRedandBothCells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:RedandBothCells
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MeasureObjectSizeShape:[module_num:46|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notes:['The next two modules measure the size and intensity of the red dots - if applicable. ']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
    Select object sets to measure:GreenCells_lepR, RedCells_pdyn, RedandGreenCells
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:47|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enabled:False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
    Select images to measure:OrigRed
    Select objects to measure:GreenCells_lepR, RedandGreenCells

ExportToSpreadsheet:[module_num:48|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notes:['This module exports all calculations.', '']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Desktop\\CellProfiler outputs\\20220629_lepr+pdyn
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:
    Overwrite existing files without warning?:No
    Data to export:GreenCells_lepR
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:RedandGreenCells
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:RedCells_pdyn
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
